PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = project_cogload
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent cognload
      font = Georgia
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      text [set every repeat] = $cogload
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    TextComponent qns
      font = Georgia
      letterHeight = 0.05
      startVal [time (s)] = 10.5
      text [set every repeat] = $riskqns
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 10.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cogload_cons.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cogload': 'Count backward from 500 by subtracting 7 each time.', 'riskqns': 'You have the option to take a challenging elective course that aligns with your interests but has a reputation for being demanding. Do you enroll in the course?', 'instructions': 'There will be 2 questions displayed after each cross fixation. Solve the first question in your mind. You have 10 seconds. Your response is not required. The second question will be a yes or no type question. Read it carefully and press "y" to answer yes and "n" for no.'},
      {'cogload': 'Multiply 24 by 13 and then divide the result by 4.', 'riskqns': "You are invited to a networking event with professionals in your field, but it's on the same day as a highly anticipated concert you've been looking forward to. Do you attend the networking event?", 'instructions': None},
      {'cogload': 'What is the result of 825 - 347?', 'riskqns': 'A friend suggests investing in a startup with great potential but a high level of risk. Do you contribute financially to the startup?', 'instructions': None},
      {'cogload': 'Subtract 136, multiply by 5, and then add 72.', 'riskqns': 'You have the chance to participate in a study abroad program during a semester, but it means delaying your graduation by one semester. Do you choose to study abroad?', 'instructions': None},
      {'cogload': 'Calculate 15% of 480.', 'riskqns': "You're invited to a major social event the night before a crucial exam. Do you attend the event?", 'instructions': None}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
    Routine trial
  LoopTerminator trials
