PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = project_noload
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent images
      image [set every repeat] = $yun 
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    TextComponent qns
      font = Georgia
      letterHeight = 0.05
      startVal [time (s)] = 2.5
      text [set every repeat] = $riskqns
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = noload_cons.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'yun': 'image1.jpg', 'riskqns': 'You have the option to take a challenging elective course that aligns with your interests but has a reputation for being demanding. Do you enroll in the course?'},
      {'yun': 'image2.jpg', 'riskqns': "You are invited to a networking event with professionals in your field, but it's on the same day as a highly anticipated concert you've been looking forward to. Do you attend the networking event?"},
      {'yun': 'image3.jpg', 'riskqns': 'A friend suggests investing in a startup with great potential but a high level of risk. Do you contribute financially to the startup?'},
      {'yun': 'image4.jpg', 'riskqns': 'You have the chance to participate in a study abroad program during a semester, but it means delaying your graduation by one semester. Do you choose to study abroad?'},
      {'yun': 'image5.jpg', 'riskqns': "You're invited to a major social event the night before a crucial exam. Do you attend the event?"},
      {'yun': 'image6.jpg', 'riskqns': 'You receive a job offer for a position related to your field of study, but it requires relocating to a different city. Do you accept the job offer?'},
      {'yun': 'image7.jpg', 'riskqns': 'You are offered a leadership role in a student organization, but it comes with increased responsibilities and time commitment. Do you accept the leadership role?'}]
    Routine trial
  LoopTerminator trials
